# Scanning nozzle used in some demonstrations.

includeFile = GBFull_Constants.txt
includeFile = GBFull_DipoleQ1.txt
includeFile = GBFull_DipoleQ2.txt
includeFile = GBFull_DipoleQ3.txt
includeFile = GBFull_DipoleModQ4Only.txt

s:Gr/ViewA/Type              = "OpenGL"

Ts/UseQt = "True"
b:Gr/Enable = "True"

#Ts/DumpParameters = "T"

########################################
#1. Beam Exit Window
#100 um thickness Aluminized Polyimide window
########################################
s:Ge/ExitWindow/Parent       = "FlipGantry"
s:Ge/ExitWindow/Type         = "TsCylinder"
s:Ge/ExitWindow/Material     = "Kapton" #supposed to be aluminized polyimide
d:Ge/ExitWindow/RMin         = 0.0  mm
d:Ge/ExitWindow/RMax         = 50.0 mm
d:Ge/ExitWindow/SPhi         = 0.0   deg
d:Ge/ExitWindow/DPhi         = 360.0 deg
d:Ge/ExitWindow/TransX       = 0.0 m
d:Ge/ExitWindow/TransY       = -1.15 m #0.563 m
d:Ge/ExitWindow/TransZ       = -3.27 m #2.62 m
d:Ge/ExitWindow/RotX         = 0.0 deg
d:Ge/ExitWindow/RotY         = 0.0 deg
d:Ge/ExitWindow/RotZ         = 0.0 deg
b:Ge/ExitWindow/Include      = "TRUE" 
s:Ge/ExitWindow/DrawingStyle = "Solid"

########################################
# Pipe through Dipoles/
########################################
s:Ge/BeamPipeInQuadsDipoles/Parent = "FlipGantry"
s:Ge/BeamPipeInQuadsDipoles/Type   = "Group"
d:Ge/BeamPipeInQuadsDipoles/TransX = 0.0 m
d:Ge/BeamPipeInQuadsDipoles/TransY = -1.15 m #0.563 m
d:Ge/BeamPipeInQuadsDipoles/OriTransZ =  Ge/ZPlusOf_Pipe - Ge/HLOf_Pipe  mm 
d:Ge/BeamPipeInQuadsDipoles/TransZ = Ge/BeamPipeInQuadsDipoles/OriTransZ - 1. mm  
d:Ge/BeamPipeInQuadsDipoles/RotX   = 0. deg
d:Ge/BeamPipeInQuadsDipoles/RotY   = 0. deg
d:Ge/BeamPipeInQuadsDipoles/RotZ   = 0. deg
b:Ge/BeamPipeInQuadsDipoles/Include  = "TRUE" #FIXMENOW

d:Ge/ZPlusPipeInDipoles = 0.0 cm # FIXME Ge/PipeConnector/TransZ - Ge/HLOf_PipeConnector cm

s:Ge/PipeInDipoles/Parent   = "BeamPipeInQuadsDipoles"
s:Ge/PipeInDipoles/Type     = "TsBox"
s:Ge/PipeInDipoles/Material = Ge/MaterialOf_PipeWall 
d:Ge/PipeInDipoles/HLX      = Ge/HLxyOf_Dipoles + Ge/ThicknessOf_Pipe mm
d:Ge/PipeInDipoles/HLY      = Ge/HLxyOf_Dipoles + Ge/ThicknessOf_Pipe mm
d:Ge/PipeInDipoles/HLZ      = Ge/HLOf_PipeInDipoles cm
d:Ge/PipeInDipoles/TransX   = 0.0 mm
d:Ge/PipeInDipoles/TransY   = 0.0 mm
d:Ge/PipeInDipoles/TransZ   = Ge/ZPlusPipeInDipoles - Ge/HLOf_PipeInDipoles cm
d:Ge/PipeInDipoles/RotX     = 0.0 deg
d:Ge/PipeInDipoles/RotY     = 0.0 deg
d:Ge/PipeInDipoles/RotZ     = 0.0 deg
b:Ge/PipeInDipoles/Include  = "TRUE" #FIXMENOW

s:Ge/PipeInDipoles/Gas/Parent   = "PipeInDipoles"
s:Ge/PipeInDipoles/Gas/Type     = "TsBox"
s:Ge/PipeInDipoles/Gas/Material = Ge/MaterialOf_PipeGas
d:Ge/PipeInDipoles/Gas/TransX   = 0.0 mm
d:Ge/PipeInDipoles/Gas/TransY   = 0.0 mm
d:Ge/PipeInDipoles/Gas/TransZ   = 0.0 mm
d:Ge/PipeInDipoles/Gas/RotX     = 0.0 deg
d:Ge/PipeInDipoles/Gas/RotY     = 0.0 deg
d:Ge/PipeInDipoles/Gas/RotZ     = 0.0 deg
b:Ge/PipeInDipoles/Gas/Include  = "TRUE" #FIXMENOW

########################################
#5. Dipole 1 and 2. in Pipe
########################################
s:Ge/Dipole1/Type          = "TsBox"
s:Ge/Dipole1/Parent        = "PipeInDipoles/Gas"
s:Ge/Dipole1/Material      = "parent"
d:Ge/Dipole1/HLX           = Ge/PipeInDipoles/Gas/HLX mm
d:Ge/Dipole1/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Dipole1/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/Dipole1/TransX        = 0.0 cm
d:Ge/Dipole1/TransY        = 0.0 cm
d:Ge/Dipole1/TransZ        = Ge/HLOf_PipeInDipoles - Ge/HLOf_DipoleCoil1  mm
d:Ge/Dipole1/RotX          = 0.0 deg
d:Ge/Dipole1/RotY          = 0.0 deg
d:Ge/Dipole1/RotZ          = 0.0 deg
s:Ge/Dipole1/Field = "DipoleMagnet"
u:Ge/Dipole1/MagneticFieldDirectionX    = 1.0 #Deflect a beam down 
u:Ge/Dipole1/MagneticFieldDirectionY    = 0.0
u:Ge/Dipole1/MagneticFieldDirectionZ    = 0.0
d:Ge/Dipole1/MagneticFieldStrength      = 0.0 tesla
b:Ge/Dipole1/Include  = "TRUE" #FIXMENOW
d:Ge/ZMinusOf_Dipole1 = Ge/Dipole1/TransZ - Ge/HLOf_DipoleCoil1 mm
d:Ge/ZPlusOf_Dipole2  = Ge/ZMinusOf_Dipole1 + Ge/DistanceOf_BottomDipoleCoil1_To_TopDipoleCoil2 cm

s:Ge/Dipole2/Type          = "TsBox"
s:Ge/Dipole2/Parent        = "PipeInDipoles/Gas"
s:Ge/Dipole2/Material      = "parent"
d:Ge/Dipole2/HLX           = Ge/PipeInDipoles/Gas/HLX mm
d:Ge/Dipole2/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Dipole2/HLZ           = Ge/HLOf_Dipole2 mm
d:Ge/Dipole2/TransX        = 0.0 cm
d:Ge/Dipole2/TransY        = 0.0 cm
d:Ge/Dipole2/TransZ        = Ge/ZPlusOf_Dipole2 - Ge/HLOf_DipoleCoil2  mm
d:Ge/Dipole2/RotX          = 0.0 deg
d:Ge/Dipole2/RotY          = 0.0 deg
d:Ge/Dipole2/RotZ          = 0.0 deg
s:Ge/Dipole2/Field = "DipoleMagnet"
u:Ge/Dipole2/MagneticFieldDirectionX    = 0.0
u:Ge/Dipole2/MagneticFieldDirectionY    = 1.0 #Deflect a beam right 
u:Ge/Dipole2/MagneticFieldDirectionZ    = 0.0
d:Ge/Dipole2/MagneticFieldStrength      = 0.0 tesla
b:Ge/Dipole2/Include  = "TRUE" #FIXMENOW

########################################
#3. Beam profile monitor 2
# 2 Aluminized polyimide windows
# 2 sets of Multi-wire chamber
########################################
s:Ge/BeamProfileMonitor2/Parent   = "FlipGantry"
s:Ge/BeamProfileMonitor2/Type     = "TsBox"
s:Ge/BeamProfileMonitor2/Material = "Vacuum" #FIXME? vacuum of 1e-5 Torr 
d:Ge/BeamProfileMonitor2/HLX      = 188.0 mm
d:Ge/BeamProfileMonitor2/HLY      = 188.0 mm
d:Ge/BeamProfileMonitor2/HLZ      = 22.1 mm #FIXME OK
d:Ge/BeamProfileMonitor2/TransX   = 0.0 m
d:Ge/BeamProfileMonitor2/TransY   = -1.15 m #0.563  m
d:Ge/BeamProfileMonitor2/TransZ   = -4.6986 m #3.2614 m #FIXME OK
d:Ge/BeamProfileMonitor2/RotX     = 0.0 deg
d:Ge/BeamProfileMonitor2/RotY     = 0.0 deg
d:Ge/BeamProfileMonitor2/RotZ     = 0.0 deg
b:Ge/BeamProfileMonitor2/Include  = "TRUE" #FIXMENOW

s:Ge/BeamProfileMonitor2/Window1/Parent   = "BeamProfileMonitor2"
s:Ge/BeamProfileMonitor2/Window1/Type     = "TsBox"
s:Ge/BeamProfileMonitor2/Window1/Material = "Kapton" #FIXME? supposed to be aluminized polyimide
d:Ge/BeamProfileMonitor2/Window1/HLX      = 186.0  mm #FIXME OK
d:Ge/BeamProfileMonitor2/Window1/HLY      = 186.0  mm #FIXME OK
d:Ge/BeamProfileMonitor2/Window1/HLZ      = 0.00625 mm #FIXME OK
d:Ge/BeamProfileMonitor2/Window1/TransX   = 0.0 mm
d:Ge/BeamProfileMonitor2/Window1/TransY   = 0.0 mm
d:Ge/BeamProfileMonitor2/Window1/TransZ   = 22.0 mm #FIXME OK
d:Ge/BeamProfileMonitor2/Window1/RotX     = 0.0 deg
d:Ge/BeamProfileMonitor2/Window1/RotY     = 0.0 deg
d:Ge/BeamProfileMonitor2/Window1/RotZ     = 0.0 deg

s:Ge/BeamProfileMonitor2/Window2/Parent   = "BeamProfileMonitor2"
s:Ge/BeamProfileMonitor2/Window2/Type     = "TsBox"
s:Ge/BeamProfileMonitor2/Window2/Material = "Kapton" #FIXME? supposed to be aluminized polyimide
d:Ge/BeamProfileMonitor2/Window2/HLX      = 186.0  mm #FIXME OK
d:Ge/BeamProfileMonitor2/Window2/HLY      = 186.0  mm #FIXME OK
d:Ge/BeamProfileMonitor2/Window2/HLZ      = 0.00625 mm #FIXME OK
d:Ge/BeamProfileMonitor2/Window2/TransX   = 0.0 mm
d:Ge/BeamProfileMonitor2/Window2/TransY   = 0.0 mm
d:Ge/BeamProfileMonitor2/Window2/TransZ   = -21.9 mm #FIXME OK
d:Ge/BeamProfileMonitor2/Window2/RotX     = 0.0 deg
d:Ge/BeamProfileMonitor2/Window2/RotY     = 0.0 deg
d:Ge/BeamProfileMonitor2/Window2/RotZ     = 0.0 deg

s:Ge/MWC_In_BPM2/Parent     = "BeamProfileMonitor2"
s:Ge/MWC_In_BPM2/Type       = "TsMultiWireChamber"
s:Ge/MWC_In_BPM2/Material   = "parent"
d:Ge/MWC_In_BPM2/HLX        = 186.0  mm #FIXME OK
d:Ge/MWC_In_BPM2/HLY        = 186.0  mm #FIXME OK
d:Ge/MWC_In_BPM2/HLZ        = 7 mm #FIXME OK
d:Ge/MWC_In_BPM2/TransX     = 0.0 mm
d:Ge/MWC_In_BPM2/TransY     = 0.0 mm
d:Ge/MWC_In_BPM2/TransZ     = -7 mm #FIXME OK
d:Ge/MWC_In_BPM2/RotX       = 0.0   deg
d:Ge/MWC_In_BPM2/RotY       = 0.0   deg
d:Ge/MWC_In_BPM2/RotZ       = 0.0   deg
i:Ge/MWC_In_BPM2/NbOfLayers = 2
b:Ge/MWC_In_BPM2/Include  = "TRUE" #FIXMENOW

d:Ge/MWC_In_BPM2/Layer1/RMin          = 0.0 mm
d:Ge/MWC_In_BPM2/Layer1/RMax          = 0.00625 mm #FIXME?
s:Ge/MWC_In_BPM2/Layer1/Material      = "Aluminum" #FIXME?
d:Ge/MWC_In_BPM2/Layer1/HL            = 186.0 mm #FIXME OK
s:Ge/MWC_In_BPM2/Layer1/Align         = "X"
d:Ge/MWC_In_BPM2/Layer1/PosZ          = 7.0 mm #FIXME OK
s:Ge/MWC_In_BPM2/Layer1/DrawingStyle  = "Solid"
dv:Ge/MWC_In_BPM2/Layer1/Displacement = 127 #FIXME?
-119.07 -117.18 -115.29 -113.4 -111.51 -109.62 -107.73 -105.84
-103.95 -102.06 -100.17 -98.28 -96.39 -94.5 -92.61 -90.72 
-88.83 -86.94 -85.05 -83.16 -81.27 -79.38 -77.49 -75.6 
-73.71 -71.82 -69.93 -68.04 -66.15 -64.26 -62.37 -60.48
-58.59 -56.7 -54.81 -52.92 -51.03 -49.14 -47.25 -45.36
-43.47 -41.58 -39.69 -37.8 -35.91 -34.02 -32.13 -30.24
-28.35 -26.46 -24.57 -22.68 -20.79 -18.9 -17.01 -15.12
-13.23 -11.34 -9.45  -7.56  -5.67  -3.78  -1.89 
0.      1.89   3.78   5.67   7.56   9.45   11.34   13.23 
15.12   17.01  18.9   20.79  22.68  24.57  26.46   28.35
30.24   32.13  34.02  35.91  37.8   39.69  41.58   43.47
45.36   47.25  49.14  51.03  52.92  54.81  56.7    58.59 
60.48   62.37  64.26  66.15  68.04  69.93  71.82   73.71
75.6    77.49  79.38  81.27  83.16  85.05  86.94   88.83
90.72   92.61  94.5   96.39  98.28  100.17 102.06  103.95
105.84  107.73 109.62 111.51 113.4  115.29 117.18  119.07 mm

d:Ge/MWC_In_BPM2/Layer2/RMin          = 0.0 mm
d:Ge/MWC_In_BPM2/Layer2/RMax          = 0.00625 mm #FIXME?
s:Ge/MWC_In_BPM2/Layer2/Material      = "Aluminum" #FIXME?
d:Ge/MWC_In_BPM2/Layer2/HL            = 186.0 mm #FIXME OK
s:Ge/MWC_In_BPM2/Layer2/Align         = "Y"
d:Ge/MWC_In_BPM2/Layer2/PosZ          = -7.0 mm #FIXME OK
s:Ge/MWC_In_BPM2/Layer2/DrawingStyle  =  "Solid"
s:Ge/MWC_In_BPM2/Layer2/Color         = "red"
dv:Ge/MWC_In_BPM2/Layer2/Displacement = 127 #FIXME?
-119.07 -117.18 -115.29 -113.4 -111.51 -109.62 -107.73 -105.84
-103.95 -102.06 -100.17 -98.28 -96.39 -94.5 -92.61 -90.72 
-88.83 -86.94 -85.05 -83.16 -81.27 -79.38 -77.49 -75.6 
-73.71 -71.82 -69.93 -68.04 -66.15 -64.26 -62.37 -60.48
-58.59 -56.7 -54.81 -52.92 -51.03 -49.14 -47.25 -45.36
-43.47 -41.58 -39.69 -37.8 -35.91 -34.02 -32.13 -30.24
-28.35 -26.46 -24.57 -22.68 -20.79 -18.9 -17.01 -15.12
-13.23 -11.34 -9.45  -7.56  -5.67  -3.78  -1.89 
0.      1.89   3.78   5.67   7.56   9.45   11.34   13.23 
15.12   17.01  18.9   20.79  22.68  24.57  26.46   28.35
30.24   32.13  34.02  35.91  37.8   39.69  41.58   43.47
45.36   47.25  49.14  51.03  52.92  54.81  56.7    58.59 
60.48   62.37  64.26  66.15  68.04  69.93  71.82   73.71
75.6    77.49  79.38  81.27  83.16  85.05  86.94   88.83
90.72   92.61  94.5   96.39  98.28  100.17 102.06  103.95
105.84  107.73 109.62 111.51 113.4  115.29 117.18  119.07 mm

########################################
#4. Beam profile monitor 1
# 2 Aluminized Polyimide windows
# 2 sets of Multi-wire chamber
########################################
s:Ge/BeamProfileMonitor1/Parent   = "FlipGantry"
s:Ge/BeamProfileMonitor1/Type     = "TsBox"
s:Ge/BeamProfileMonitor1/Material = "Vacuum" #FIXME? vacuum of 1e-5 Torr
d:Ge/BeamProfileMonitor1/HLX      = 186.0 mm #FIXME OK
d:Ge/BeamProfileMonitor1/HLY      = 186.0 mm #FIXME OK
d:Ge/BeamProfileMonitor1/HLZ      = 22.1 mm #FIXME OK
d:Ge/BeamProfileMonitor1/TransX   = 0 m
d:Ge/BeamProfileMonitor1/TransY   = -1.15 m #0.563  m
d:Ge/BeamProfileMonitor1/TransZ   = -4.7986 m #3.1614 m #FIXME OK
d:Ge/BeamProfileMonitor1/RotX     = 0.0 deg
d:Ge/BeamProfileMonitor1/RotY     = 0.0 deg
d:Ge/BeamProfileMonitor1/RotZ     = 0.0 deg
b:Ge/BeamProfileMonitor1/Include  = "TRUE" #FIXMENOW

s:Ge/BeamProfileMonitor1/Window1/Parent   = "BeamProfileMonitor1"
s:Ge/BeamProfileMonitor1/Window1/Type     = "TsBox"
s:Ge/BeamProfileMonitor1/Window1/Material = "Kapton" #FIXME? supposed to be aluminized polyimide
d:Ge/BeamProfileMonitor1/Window1/HLX      = 186.0  mm #FIXME OK
d:Ge/BeamProfileMonitor1/Window1/HLY      = 186.0  mm #FIXME OK
d:Ge/BeamProfileMonitor1/Window1/HLZ      = 0.00625 mm #FIXME OK
d:Ge/BeamProfileMonitor1/Window1/TransX   = 0.0 mm
d:Ge/BeamProfileMonitor1/Window1/TransY   = 0.0 mm
d:Ge/BeamProfileMonitor1/Window1/TransZ   = 22.0 mm #FIXME OK
d:Ge/BeamProfileMonitor1/Window1/RotX     = 0.0 deg
d:Ge/BeamProfileMonitor1/Window1/RotY     = 0.0 deg
d:Ge/BeamProfileMonitor1/Window1/RotZ     = 0.0 deg

s:Ge/BeamProfileMonitor1/Window2/Parent   = "BeamProfileMonitor1"
s:Ge/BeamProfileMonitor1/Window2/Type     = "TsBox"
s:Ge/BeamProfileMonitor1/Window2/Material = "Kapton" #FIXME? supposed to be aluminized polyimide
d:Ge/BeamProfileMonitor1/Window2/HLX      = 186.0  mm #FIXME OK
d:Ge/BeamProfileMonitor1/Window2/HLY      = 186.0  mm #FIXME OK
d:Ge/BeamProfileMonitor1/Window2/HLZ      = 0.00625 mm #FIXME OK
d:Ge/BeamProfileMonitor1/Window2/TransX   = 0.0 mm
d:Ge/BeamProfileMonitor1/Window2/TransY   = 0.0 mm
d:Ge/BeamProfileMonitor1/Window2/TransZ   = -21.9 mm #FIXME OK
d:Ge/BeamProfileMonitor1/Window2/RotX     = 0.0 deg
d:Ge/BeamProfileMonitor1/Window2/RotY     = 0.0 deg
d:Ge/BeamProfileMonitor1/Window2/RotZ     = 0.0 deg

s:Ge/MWC_In_BPM1/Parent     = "BeamProfileMonitor1"
s:Ge/MWC_In_BPM1/Type       = "TsMultiWireChamber"
s:Ge/MWC_In_BPM1/Material   = "parent"
d:Ge/MWC_In_BPM1/HLX        = 186.0  mm #FIXME OK
d:Ge/MWC_In_BPM1/HLY        = 186.0  mm #FIXME OK
d:Ge/MWC_In_BPM1/HLZ        = 7.0 mm #FIXME OK 
d:Ge/MWC_In_BPM1/TransX     = 0.0 mm
d:Ge/MWC_In_BPM1/TransY     = 0.0 mm
d:Ge/MWC_In_BPM1/TransZ     = -7.0 mm #FIXME OK
d:Ge/MWC_In_BPM1/RotX       = 0.0   deg
d:Ge/MWC_In_BPM1/RotY       = 0.0   deg
d:Ge/MWC_In_BPM1/RotZ       = 0.0   deg
i:Ge/MWC_In_BPM1/NbOfLayers = 2

d:Ge/MWC_In_BPM1/Layer1/RMin          = 0.0 mm
d:Ge/MWC_In_BPM1/Layer1/RMax          = 0.00625 mm #FIXME?
s:Ge/MWC_In_BPM1/Layer1/Material      = "Aluminum" #FIXME?
d:Ge/MWC_In_BPM1/Layer1/HL            = 186.0 mm #FIXME OK
s:Ge/MWC_In_BPM1/Layer1/Align         = "X"
d:Ge/MWC_In_BPM1/Layer1/PosZ          = 7.0 mm #FIXME OK
s:Ge/MWC_In_BPM1/Layer1/DrawingStyle  = "Solid"
dv:Ge/MWC_In_BPM1/Layer1/Displacement = 127 #FIXME?
-119.07 -117.18 -115.29 -113.4 -111.51 -109.62 -107.73 -105.84
-103.95 -102.06 -100.17 -98.28 -96.39 -94.5 -92.61 -90.72 
-88.83 -86.94 -85.05 -83.16 -81.27 -79.38 -77.49 -75.6 
-73.71 -71.82 -69.93 -68.04 -66.15 -64.26 -62.37 -60.48
-58.59 -56.7 -54.81 -52.92 -51.03 -49.14 -47.25 -45.36
-43.47 -41.58 -39.69 -37.8 -35.91 -34.02 -32.13 -30.24
-28.35 -26.46 -24.57 -22.68 -20.79 -18.9 -17.01 -15.12
-13.23 -11.34 -9.45  -7.56  -5.67  -3.78  -1.89 
0.      1.89   3.78   5.67   7.56   9.45   11.34   13.23 
15.12   17.01  18.9   20.79  22.68  24.57  26.46   28.35
30.24   32.13  34.02  35.91  37.8   39.69  41.58   43.47
45.36   47.25  49.14  51.03  52.92  54.81  56.7    58.59 
60.48   62.37  64.26  66.15  68.04  69.93  71.82   73.71
75.6    77.49  79.38  81.27  83.16  85.05  86.94   88.83
90.72   92.61  94.5   96.39  98.28  100.17 102.06  103.95
105.84  107.73 109.62 111.51 113.4  115.29 117.18  119.07 mm

d:Ge/MWC_In_BPM1/Layer2/RMin          = 0.0 mm
d:Ge/MWC_In_BPM1/Layer2/RMax          = 0.00625 mm #FIXME?
s:Ge/MWC_In_BPM1/Layer2/Material      = "Aluminum" #FIXME?
d:Ge/MWC_In_BPM1/Layer2/HL            = 186.0 mm #FIXME OK
s:Ge/MWC_In_BPM1/Layer2/Align         = "Y"
d:Ge/MWC_In_BPM1/Layer2/PosZ          = -7.0 mm #FIXME OK
s:Ge/MWC_In_BPM1/Layer2/DrawingStyle  =  "Solid"
s:Ge/MWC_In_BPM1/Layer2/Color         = "red"
dv:Ge/MWC_In_BPM1/Layer2/Displacement = 127 #FIXME?
-119.07 -117.18 -115.29 -113.4 -111.51 -109.62 -107.73 -105.84
-103.95 -102.06 -100.17 -98.28 -96.39 -94.5 -92.61 -90.72 
-88.83 -86.94 -85.05 -83.16 -81.27 -79.38 -77.49 -75.6 
-73.71 -71.82 -69.93 -68.04 -66.15 -64.26 -62.37 -60.48
-58.59 -56.7 -54.81 -52.92 -51.03 -49.14 -47.25 -45.36
-43.47 -41.58 -39.69 -37.8 -35.91 -34.02 -32.13 -30.24
-28.35 -26.46 -24.57 -22.68 -20.79 -18.9 -17.01 -15.12
-13.23 -11.34 -9.45  -7.56  -5.67  -3.78  -1.89   0.
1.89   3.78   5.67   7.56   9.45   11.34   13.23  15.12 
17.01  18.9   20.79  22.68  24.57  26.46   28.35  30.24  
32.13  34.02  35.91  37.8   39.69  41.58   43.47  45.36
47.25  49.14  51.03  52.92  54.81  56.7    58.59  60.48
62.37  64.26  66.15  68.04  69.93  71.82   73.71  75.6
77.49  79.38  81.27  83.16  85.05  86.94   88.83  90.72
92.61  94.5   96.39  98.28  100.17 102.06  103.95 105.84
107.73 109.62 111.51 113.4  115.29 117.18  119.07 mm

i:Gr/ViewA/MagneticFieldArrowDensity = 10

########################################
# Water Phantom
########################################
s:Ge/WaterBox/Type     = "TsBox"
s:Ge/WaterBox/Parent   = "FlipGantry"
s:Ge/WaterBox/Material = "G4_WATER"
d:Ge/WaterBox/HLX      = 15.0 cm #FIXME OK
d:Ge/WaterBox/HLY      = 15.0 cm #FIXME OK
d:Ge/WaterBox/HLZ      = 21.0 cm #17.5 cm #FIXME OK
#d:Ge/WaterBox/MinusHLZ = Ge/WaterBox/HLZ cm * -1.0
d:Ge/WaterBox/TransX   = 0.0 m
d:Ge/WaterBox/TransY   = -1.15 m #0.563 m
d:Ge/WaterBox/TransZ   = -5.6586  m #Ge/WaterBox/MinusHLZ - 195.0 cm # 555 cm from origin 
d:Ge/WaterBox/RotX     = 0. deg #0. deg
d:Ge/WaterBox/RotY     = 0. deg
d:Ge/WaterBox/RotZ     = 0. deg
s:Ge/WaterBox/Color    = "blue"

##### Dose scoring using DoseToMedium ####
s:Ge/ScoringCylinder/Type     = "TsCylinder"
s:Ge/ScoringCylinder/Parent   = "FlipGantry"
d:Ge/ScoringCylinder/RMin     = 0. cm
d:Ge/ScoringCylinder/RMax     = 0.495 cm
d:Ge/ScoringCylinder/HL       = 21.0 cm #17.5 cm
b:Ge/ScoringCylinder/IsParallel = "True"
d:Ge/ScoringCylinder/TransX   = 0.0 m
d:Ge/ScoringCylinder/TransY   = -1.15 m #0.563 m
d:Ge/ScoringCylinder/TransZ   = -5.6586 m #Ge/WaterBox/MinusHLZ - 195 cm # 555 cm from origin
d:Ge/ScoringCylinder/SPhi     = 0. deg
d:Ge/ScoringCylinder/DPhi     = 360. deg
#i:Ge/ScoringCylinder/RBins    = 6
#i:Ge/ScoringCylinder/PhiBins  = 6
i:Ge/ScoringCylinder/ZBins    = 420

s:Sc/DoseOnRTGrid/Quantity                  = "DoseToMedium"
s:Sc/DoseOnRTGrid/Component                 = "ScoringCylinder"
s:Sc/DoseOnRTGrid/OutputType                = "csv"
sv:Sc/DoseOnRTGrid/Report                   = 1 "Mean"
b:Sc/DoseOnRTGrid/OutputToConsole           = "True"
s:Sc/DoseOnRTGrid/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/DoseOnRTGrid/OnlyIncludeParticlesNamed = 1 "proton"


########################################
# Location S1
########################################
s:Ge/SphereS1/Type     = "TsSphere"
s:Ge/SphereS1/Parent   = "Gantry"
b:Ge/SphereS1/IsParallel = "True"
s:Ge/SphereS1/Color    = "yellow"
d:Ge/SphereS1/RMax     = 15.0 cm 
d:Ge/SphereS1/SPhi     = 0. deg
d:Ge/SphereS1/DPhi     = 360. deg
d:Ge/SphereS1/STheta   = 0. deg
d:Ge/SphereS1/DTheta   = 180. deg
d:Ge/SphereS1/TransX = 2.4 m #Leon's 2.101m + Peace's mark 0.3m  
d:Ge/SphereS1/TransY = 0.15 m
d:Ge/SphereS1/TransZ = 0 m
b:Ge/SphereS1/Include  = "TRUE" 

########################################
# Location S6
########################################
s:Ge/SphereS6/Type     = "TsSphere"
s:Ge/SphereS6/Parent   = "Gantry"
b:Ge/SphereS6/IsParallel = "True"
s:Ge/SphereS6/Color    = "yellow"
d:Ge/SphereS6/RMax     = 15.0 cm 
d:Ge/SphereS6/SPhi     = 0. deg
d:Ge/SphereS6/DPhi     = 360. deg
d:Ge/SphereS6/STheta   = 0. deg
d:Ge/SphereS6/DTheta   = 180. deg
d:Ge/SphereS6/TransX = 0.0 m
d:Ge/SphereS6/TransY = 0.15 m
d:Ge/SphereS6/TransZ = -2.4 m #Leon's 2.101m + Peace's mark 0.3m
b:Ge/SphereS6/Include  = "TRUE" 

########################################
# Location S9
########################################
s:Ge/SphereS9/Type     = "TsSphere"
s:Ge/SphereS9/Parent   = "Gantry"
b:Ge/SphereS9/IsParallel = "True"
s:Ge/SphereS9/Color    = "yellow"
d:Ge/SphereS9/RMax     = 15.0 cm 
d:Ge/SphereS9/SPhi     = 0. deg
d:Ge/SphereS9/DPhi     = 360. deg
d:Ge/SphereS9/STheta   = 0. deg
d:Ge/SphereS9/DTheta   = 180. deg
d:Ge/SphereS9/TransX = 0.0 m
d:Ge/SphereS9/TransY = 0.15 m
d:Ge/SphereS9/TransZ = -1.7152 m #Leon's 2.2152m + Peace's mark -0.5m
b:Ge/SphereS9/Include  = "TRUE" 

########################################
# Location S4
########################################
s:Ge/SphereS4/Type     = "TsSphere"
s:Ge/SphereS4/Parent   = "Gantry"
b:Ge/SphereS4/IsParallel = "True"
s:Ge/SphereS4/Color    = "yellow"
d:Ge/SphereS4/RMax     = 15.0 cm 
d:Ge/SphereS4/SPhi     = 0. deg
d:Ge/SphereS4/DPhi     = 360. deg
d:Ge/SphereS4/STheta   = 0. deg
d:Ge/SphereS4/DTheta   = 180. deg
d:Ge/SphereS4/TransX = 1.1 m
d:Ge/SphereS4/TransY = 1.35 m #Peace's couch 1.2 m + sphere's r 0.15 m 
d:Ge/SphereS4/TransZ = 0 m
b:Ge/SphereS4/Include  = "TRUE" 

########################################
# Location S2
########################################
s:Ge/SphereS2/Type     = "TsSphere"
s:Ge/SphereS2/Parent   = "Gantry"
b:Ge/SphereS2/IsParallel = "True"
s:Ge/SphereS2/Color    = "yellow"
d:Ge/SphereS2/RMax     = 15.0 cm 
d:Ge/SphereS2/SPhi     = 0. deg
d:Ge/SphereS2/DPhi     = 360. deg
d:Ge/SphereS2/STheta   = 0. deg
d:Ge/SphereS2/DTheta   = 180. deg
d:Ge/SphereS2/TransX = 1.6 m
d:Ge/SphereS2/TransY = 1.35 m #Peace's couch 1.2 m + sphere's r 0.15 m 
d:Ge/SphereS2/TransZ = 0 m
b:Ge/SphereS2/Include  = "TRUE" 

########################################
# Location S11
########################################
s:Ge/SphereS11/Type     = "TsSphere"
s:Ge/SphereS11/Parent   = "FlipGantry"
b:Ge/SphereS11/IsParallel = "True"
s:Ge/SphereS11/Color    = "yellow"
d:Ge/SphereS11/RMax     = 15.0 cm 
d:Ge/SphereS11/SPhi     = 0. deg
d:Ge/SphereS11/DPhi     = 360. deg
d:Ge/SphereS11/STheta   = 0. deg
d:Ge/SphereS11/DTheta   = 180. deg
d:Ge/SphereS11/TransX   = 0.0 m
d:Ge/SphereS11/TransY   = -1.15 m #0.563 m
d:Ge/SphereS11/TransZ   = -6.1586 m 
b:Ge/SphereS11/Include  = "TRUE" 

