# Scanning nozzle used in some demonstrations.


#Ts/DumpParameters = "T"

includeFile = GPTConstantsForNozzlesTop.txt

b:Ge/TopRing/Include  = "TRUE" 

# Pipeline/Collimator 
s:Ge/MSYoke/Type       = "TsBox"
s:Ge/MSYoke/Parent     = "Gantry"
# Make the yoke bigger than the gap by the chosen iron thickness
d:Ge/MSYoke/FLX        = Ge/MSGapeWidth + Ge/MSYokeDoubleThickRadial cm
d:Ge/MSYoke/HLX        = 20.0 cm 
d:Ge/MSYoke/HLY        = 15.0 cm
d:Ge/MSYoke/FLZ        = Ge/MSGapeHeight + Ge/MSYokeDoubleThickRadial cm
d:Ge/MSYoke/HLZ        = 20.0 cm 
s:Ge/MSYoke/Material   = "G4_Fe"
d:Ge/MSYoke/TransX     = 0.0 m
d:Ge/MSYoke/TransY     = 1.4 m 
d:Ge/MSYoke/TransZ     = 1.35 m
# Rotate so local Y is along the ring tangent (same as septum)
d:Ge/MSYoke/RotY       = Ge/SeptumPhi deg
b:Ge/MSYoke/Include    = "TRUE" 

# Field gap carved as a daughter (overrides parent material)
s:Ge/MSGap/Type        = "TsBox"
s:Ge/MSGap/Parent      = "MSYoke"
d:Ge/MSGap/HLX         = Ge/MSYoke/HLX cm
d:Ge/MSGap/HLY         = 15.0 cm
d:Ge/MSGap/HLZ         = Ge/MSGapeHeight cm * 0.5
s:Ge/MSGap/Material    = "G4_AIR"
b:Ge/MSGap/IsInvisible  = "FALSE"
b:Ge/MSGap/Include    = "FALSE" 


#######################################
# Extra Dipole near Extraction 2
########################################
s:Ge/Ex2Dipole1/Type          = "TsBox"
s:Ge/Ex2Dipole1/Parent        = "Gantry"
s:Ge/Ex2Dipole1/Material      = "parent"
d:Ge/Ex2Dipole1/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Ex2Dipole1/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Ex2Dipole1/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/Ex2Dipole1/TransX        = 1.9 m 
d:Ge/Ex2Dipole1/TransY        = 1.6 m 
d:Ge/Ex2Dipole1/TransZ        = 2.2 m 
d:Ge/Ex2Dipole1/RotX          = 0.0 deg
d:Ge/Ex2Dipole1/RotY          = 45.0 deg
d:Ge/Ex2Dipole1/RotZ          = 0.0 deg
s:Ge/Ex2Dipole1/Field = "DipoleMagnet"
u:Ge/Ex2Dipole1/MagneticFieldDirectionX    = -1.0 #Deflect a beam downward
u:Ge/Ex2Dipole1/MagneticFieldDirectionY    = 0.0 
u:Ge/Ex2Dipole1/MagneticFieldDirectionZ    = 0.0
d:Ge/Ex2Dipole1/MagneticFieldStrength      = 2.0 tesla
b:Ge/Ex2Dipole1/Include  = "FALSE" 

s:Ge/Ex2Dipole2/Type          = "TsBox"
s:Ge/Ex2Dipole2/Parent        = "Gantry"
s:Ge/Ex2Dipole2/Material      = "parent"
d:Ge/Ex2Dipole2/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Ex2Dipole2/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Ex2Dipole2/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/Ex2Dipole2/TransX        = 1.2 m 
d:Ge/Ex2Dipole2/TransY        = 1.5 m
d:Ge/Ex2Dipole2/TransZ        = 2.525 m
d:Ge/Ex2Dipole2/RotX          = 0.0 deg
d:Ge/Ex2Dipole2/RotY          = 120.0 deg 
d:Ge/Ex2Dipole2/RotZ          = 0.0 deg
s:Ge/Ex2Dipole2/Field = "DipoleMagnet"
u:Ge/Ex2Dipole2/MagneticFieldDirectionX    = 0.0 
u:Ge/Ex2Dipole2/MagneticFieldDirectionY    = 1.0 #Deflect beam inward 
u:Ge/Ex2Dipole2/MagneticFieldDirectionZ    = 0.0
d:Ge/Ex2Dipole2/MagneticFieldStrength      = 2.0 tesla
b:Ge/Ex2Dipole2/Include  = "TRUE" 

s:Ge/Ex2Dipole3/Type          = "TsBox"
s:Ge/Ex2Dipole3/Parent        = "Gantry"
s:Ge/Ex2Dipole3/Material      = "parent"
d:Ge/Ex2Dipole3/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Ex2Dipole3/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Ex2Dipole3/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/Ex2Dipole3/TransX        = 0.7 m  
d:Ge/Ex2Dipole3/TransY        = 1.5 m
d:Ge/Ex2Dipole3/TransZ        = 2.4 m 
d:Ge/Ex2Dipole3/RotX          = 0.0 deg
d:Ge/Ex2Dipole3/RotY          = 135.0 deg 
d:Ge/Ex2Dipole3/RotZ          = 0.0 deg
s:Ge/Ex2Dipole3/Field = "DipoleMagnet"
u:Ge/Ex2Dipole3/MagneticFieldDirectionX    = 0.0 
u:Ge/Ex2Dipole3/MagneticFieldDirectionY    = 1.0 #Deflect beam inward 
u:Ge/Ex2Dipole3/MagneticFieldDirectionZ    = 0.0
d:Ge/Ex2Dipole3/MagneticFieldStrength      = 4.0 tesla
b:Ge/Ex2Dipole3/Include  = "TRUE" 

s:Ge/Ex2Dipole4/Type          = "TsBox"
s:Ge/Ex2Dipole4/Parent        = "Gantry"
s:Ge/Ex2Dipole4/Material      = "parent"
d:Ge/Ex2Dipole4/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Ex2Dipole4/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Ex2Dipole4/HLZ           = 10 cm
d:Ge/Ex2Dipole4/TransX        = 0.3 m 
d:Ge/Ex2Dipole4/TransY        = 1.5 m 
d:Ge/Ex2Dipole4/TransZ        = 2.15 m 
d:Ge/Ex2Dipole4/RotX          = 0.0 deg
d:Ge/Ex2Dipole4/RotY          = 145 deg
d:Ge/Ex2Dipole4/RotZ          = 0.0 deg
s:Ge/Ex2Dipole4/Field = "DipoleMagnet"
u:Ge/Ex2Dipole4/MagneticFieldDirectionX    = 0.0 
u:Ge/Ex2Dipole4/MagneticFieldDirectionY    = 1.0 #deflect beam inward  
u:Ge/Ex2Dipole4/MagneticFieldDirectionZ    = 0.0
d:Ge/Ex2Dipole4/MagneticFieldStrength      = 4.0 tesla
b:Ge/Ex2Dipole4/Include  = "TRUE" 

s:Ge/Ex2Dipole5/Type          = "TsBox"
s:Ge/Ex2Dipole5/Parent        = "Gantry"
s:Ge/Ex2Dipole5/Material      = "parent"
d:Ge/Ex2Dipole5/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Ex2Dipole5/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Ex2Dipole5/HLZ           = 10 cm
d:Ge/Ex2Dipole5/TransX        = 0.0 m 
d:Ge/Ex2Dipole5/TransY        = 1.5 m
d:Ge/Ex2Dipole5/TransZ        = 1.85 m 
d:Ge/Ex2Dipole5/RotX          = 0.0 deg
d:Ge/Ex2Dipole5/RotY          = 0.0 deg
d:Ge/Ex2Dipole5/RotZ          = 0.0 deg
s:Ge/Ex2Dipole5/Field = "DipoleMagnet"
u:Ge/Ex2Dipole5/MagneticFieldDirectionX    = 0.0 
u:Ge/Ex2Dipole5/MagneticFieldDirectionY    = 1.0 #Deflect beam inward 
u:Ge/Ex2Dipole5/MagneticFieldDirectionZ    = 0.0
d:Ge/Ex2Dipole5/MagneticFieldStrength      = 4.5 tesla  
b:Ge/Ex2Dipole5/Include  = "TRUE" 


i:Gr/ViewA/MagneticFieldArrowDensity = 10

d:Ge/WaterBox/MinusHLZ = -21.0 cm 

########################################
# Location B1
########################################
s:Ge/SphereB1/Type     = "TsSphere"
s:Ge/SphereB1/Parent   = "Gantry"
s:Ge/SphereB1/Material = "Air"
s:Ge/SphereB1/Color    = "red"
d:Ge/SphereB1/RMax     = 15.0 cm 
d:Ge/SphereB1/SPhi     = 0. deg
d:Ge/SphereB1/DPhi     = 360. deg
d:Ge/SphereB1/STheta   = 0. deg
d:Ge/SphereB1/DTheta   = 180. deg
d:Ge/SphereB1/TransX   = -50.0 cm
d:Ge/SphereB1/TransY   = 1.4 m 
d:Ge/SphereB1/TransZ   = Ge/WaterBox/MinusHLZ - 1.0 m 
b:Ge/SphereB1/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerTopB1/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerTopB1/Component                  = "SphereB1"
b:Sc/scorerDosePerTopB1/OutputToConsole            = "True"
s:Sc/scorerDosePerTopB1/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerDosePerTopB1/OutputFile                 = "scorerDosePerTopB1" + Ts/Seed
sv:Sc/scorerDosePerTopB1/Report                    = 2 "Mean" "Standard_Deviation"

# Score neutron fluence spectra 
sv:Sc/scorerNeuSpecDosePerTopB1/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerNeuSpecPerTopB1/Quantity                   = "Fluence"
s:Sc/scorerNeuSpecPerTopB1/Component                  = "SphereB1"
s:Sc/scorerNeuSpecPerTopB1/OutputType                 = "csv"
s:Sc/scorerNeuSpecPerTopB1/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerNeuSpecPerTopB1/OutputFile                 = "scorerNeuSpecPerTopB1" + Ts/Seed
i:Sc/scorerNeuSpecPerTopB1/EBins                     = 200
d:Sc/scorerNeuSpecPerTopB1/EBinMin                   = 1e-9 MeV
d:Sc/scorerNeuSpecPerTopB1/EBinMax                   = 250 MeV
s:Sc/scorerNeuSpecPerTopB1/EBinEnergy                = "DepositedInStep"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerTopB1/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerTopB1/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerTopB1/Component                  = "SphereB1"
b:Sc/scorerAmbDosePerTopB1/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerTopB1/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerAmbDosePerTopB1/OutputFile                 = "scorerAmbDosePerTopB1" + Ts/Seed
sv:Sc/scorerAmbDosePerTopB1/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerTopB1/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerTopB1/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerTopB1/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2


########################################
# Location C1
########################################
s:Ge/SphereC1/Type     = "TsSphere"
s:Ge/SphereC1/Parent   = "Gantry"
s:Ge/SphereC1/Material = "Air"
s:Ge/SphereC1/Color    = "red"
d:Ge/SphereC1/RMax     = 15.0 cm 
d:Ge/SphereC1/SPhi     = 0. deg
d:Ge/SphereC1/DPhi     = 360. deg
d:Ge/SphereC1/STheta   = 0. deg
d:Ge/SphereC1/DTheta   = 180. deg
d:Ge/SphereC1/TransX   = -200.0 cm
d:Ge/SphereC1/TransY   = 1.4 m 
d:Ge/SphereC1/TransZ   = Ge/WaterBox/MinusHLZ - 1.0 m 
b:Ge/SphereC1/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerTopC1/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerTopC1/Component                  = "SphereC1"
b:Sc/scorerDosePerTopC1/OutputToConsole            = "True"
s:Sc/scorerDosePerTopC1/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerDosePerTopC1/OutputFile                 = "scorerDosePerTopC1" + Ts/Seed
sv:Sc/scorerDosePerTopC1/Report                    = 2 "Mean" "Standard_Deviation"

# Score neutron fluence spectra 
sv:Sc/scorerNeuSpecDosePerTopC1/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerNeuSpecPerTopC1/Quantity                   = "Fluence"
s:Sc/scorerNeuSpecPerTopC1/Component                  = "SphereC1"
s:Sc/scorerNeuSpecPerTopC1/OutputType                 = "csv"
s:Sc/scorerNeuSpecPerTopC1/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerNeuSpecPerTopC1/OutputFile                 = "scorerNeuSpecPerTopC1" + Ts/Seed
i:Sc/scorerNeuSpecPerTopC1/EBins                     = 200
d:Sc/scorerNeuSpecPerTopC1/EBinMin                   = 1e-9 MeV
d:Sc/scorerNeuSpecPerTopC1/EBinMax                   = 250 MeV
s:Sc/scorerNeuSpecPerTopC1/EBinEnergy                = "DepositedInStep"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerTopC1/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerTopC1/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerTopC1/Component                  = "SphereC1"
b:Sc/scorerAmbDosePerTopC1/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerTopC1/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerAmbDosePerTopC1/OutputFile                 = "scorerAmbDosePerTopC1" + Ts/Seed
sv:Sc/scorerAmbDosePerTopC1/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerTopC1/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerTopC1/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerTopC1/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2

########################################
# Location B2
########################################
s:Ge/SphereB2/Type     = "TsSphere"
s:Ge/SphereB2/Parent   = "Gantry"
s:Ge/SphereB2/Material = "Air"
s:Ge/SphereB2/Color    = "red"
d:Ge/SphereB2/RMax     = 15.0 cm 
d:Ge/SphereB2/SPhi     = 0. deg
d:Ge/SphereB2/DPhi     = 360. deg
d:Ge/SphereB2/STheta   = 0. deg
d:Ge/SphereB2/DTheta   = 180. deg
d:Ge/SphereB2/TransX   = 50.0 cm
d:Ge/SphereB2/TransY   = 1.4 m 
d:Ge/SphereB2/TransZ   = Ge/WaterBox/MinusHLZ - 1.0 m 
b:Ge/SphereB2/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerTopB2/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerTopB2/Component                  = "SphereB2"
b:Sc/scorerDosePerTopB2/OutputToConsole            = "True"
s:Sc/scorerDosePerTopB2/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerDosePerTopB2/Report                    = 2 "Mean" "Standard_Deviation"

# Score neutron fluence spectra 
sv:Sc/scorerNeuSpecDosePerTopB2/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerNeuSpecPerTopB2/Quantity                   = "Fluence"
s:Sc/scorerNeuSpecPerTopB2/Component                  = "SphereB2"
s:Sc/scorerNeuSpecPerTopB2/OutputType                 = "csv"
s:Sc/scorerNeuSpecPerTopB2/IfOutputFileAlreadyExists  = "Overwrite"
i:Sc/scorerNeuSpecPerTopB2/EBins                     = 200
d:Sc/scorerNeuSpecPerTopB2/EBinMin                   = 1e-9 MeV
d:Sc/scorerNeuSpecPerTopB2/EBinMax                   = 250 MeV
s:Sc/scorerNeuSpecPerTopB2/EBinEnergy                = "DepositedInStep"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerTopB2/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerTopB2/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerTopB2/Component                  = "SphereB2"
b:Sc/scorerAmbDosePerTopB2/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerTopB2/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerAmbDosePerTopB2/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerTopB2/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerTopB2/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerTopB2/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2

########################################
# Location C2
########################################
s:Ge/SphereC2/Type     = "TsSphere"
s:Ge/SphereC2/Parent   = "Gantry"
s:Ge/SphereC2/Material = "Air"
s:Ge/SphereC2/Color    = "red"
d:Ge/SphereC2/RMax     = 15.0 cm 
d:Ge/SphereC2/SPhi     = 0. deg
d:Ge/SphereC2/DPhi     = 360. deg
d:Ge/SphereC2/STheta   = 0. deg
d:Ge/SphereC2/DTheta   = 180. deg
d:Ge/SphereC2/TransX   = 200.0 cm
d:Ge/SphereC2/TransY   = 1.4 m 
d:Ge/SphereC2/TransZ   = Ge/WaterBox/MinusHLZ - 1.0 m 
b:Ge/SphereC2/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerTopC2/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerTopC2/Component                  = "SphereC2"
b:Sc/scorerDosePerTopC2/OutputToConsole            = "True"
s:Sc/scorerDosePerTopC2/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerDosePerTopC2/Report                    = 2 "Mean" "Standard_Deviation"

# Score neutron fluence spectra 
sv:Sc/scorerNeuSpecDosePerTopC2/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerNeuSpecPerTopC2/Quantity                   = "Fluence"
s:Sc/scorerNeuSpecPerTopC2/Component                  = "SphereC2"
s:Sc/scorerNeuSpecPerTopC2/OutputType                 = "csv"
s:Sc/scorerNeuSpecPerTopC2/IfOutputFileAlreadyExists  = "Overwrite"
i:Sc/scorerNeuSpecPerTopC2/EBins                     = 200
d:Sc/scorerNeuSpecPerTopC2/EBinMin                   = 1e-9 MeV
d:Sc/scorerNeuSpecPerTopC2/EBinMax                   = 250 MeV
s:Sc/scorerNeuSpecPerTopC2/EBinEnergy                = "DepositedInStep"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerTopC2/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerTopC2/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerTopC2/Component                  = "SphereC2"
b:Sc/scorerAmbDosePerTopC2/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerTopC2/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerAmbDosePerTopC2/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerTopC2/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerTopC2/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerTopC2/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2




########################################
# Location B3
########################################
s:Ge/SphereB3/Type     = "TsSphere"
s:Ge/SphereB3/Parent   = "Gantry"
s:Ge/SphereB3/Material = "Air"
s:Ge/SphereB3/Color    = "red"
d:Ge/SphereB3/RMax     = 15.0 cm 
d:Ge/SphereB3/SPhi     = 0. deg
d:Ge/SphereB3/DPhi     = 360. deg
d:Ge/SphereB3/STheta   = 0. deg
d:Ge/SphereB3/DTheta   = 180. deg
d:Ge/SphereB3/TransX   = 0.0 cm
d:Ge/SphereB3/TransY   = 1.4 m
d:Ge/SphereB3/TransZ   = Ge/WaterBox/MinusHLZ - 1.5 m 
b:Ge/SphereB3/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerTopB3/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerTopB3/Component                  = "SphereB3"
b:Sc/scorerDosePerTopB3/OutputToConsole            = "True"
s:Sc/scorerDosePerTopB3/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerDosePerTopB3/Report                    = 2 "Mean" "Standard_Deviation"

# Score neutron fluence spectra 
sv:Sc/scorerNeuSpecDosePerTopB3/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerNeuSpecPerTopB3/Quantity                   = "Fluence"
s:Sc/scorerNeuSpecPerTopB3/Component                  = "SphereB3"
s:Sc/scorerNeuSpecPerTopB3/OutputType                 = "csv"
s:Sc/scorerNeuSpecPerTopB3/IfOutputFileAlreadyExists  = "Overwrite"
i:Sc/scorerNeuSpecPerTopB3/EBins                     = 200
d:Sc/scorerNeuSpecPerTopB3/EBinMin                   = 1e-9 MeV
d:Sc/scorerNeuSpecPerTopB3/EBinMax                   = 250 MeV
s:Sc/scorerNeuSpecPerTopB3/EBinEnergy                = "DepositedInStep"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerTopB3/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerTopB3/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerTopB3/Component                  = "SphereB3"
b:Sc/scorerAmbDosePerTopB3/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerTopB3/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerAmbDosePerTopB3/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerTopB3/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerTopB3/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerTopB3/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2

########################################
# Location C3
########################################
s:Ge/SphereC3/Type     = "TsSphere"
s:Ge/SphereC3/Parent   = "Gantry"
s:Ge/SphereC3/Material = "Air"
s:Ge/SphereC3/Color    = "red"
d:Ge/SphereC3/RMax     = 15.0 cm 
d:Ge/SphereC3/SPhi     = 0. deg
d:Ge/SphereC3/DPhi     = 360. deg
d:Ge/SphereC3/STheta   = 0. deg
d:Ge/SphereC3/DTheta   = 180. deg
d:Ge/SphereC3/TransX   = 0.0 cm
d:Ge/SphereC3/TransY   = 1.4 m 
d:Ge/SphereC3/TransZ   = Ge/WaterBox/MinusHLZ - 3.0 m  
b:Ge/SphereC3/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerTopC3/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerTopC3/Component                  = "SphereC3"
b:Sc/scorerDosePerTopC3/OutputToConsole            = "True"
s:Sc/scorerDosePerTopC3/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerDosePerTopC3/Report                    = 2 "Mean" "Standard_Deviation"

# Score neutron fluence spectra 
sv:Sc/scorerNeuSpecDosePerTopC3/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerNeuSpecPerTopC3/Quantity                   = "Fluence"
s:Sc/scorerNeuSpecPerTopC3/Component                  = "SphereC3"
s:Sc/scorerNeuSpecPerTopC3/OutputType                 = "csv"
s:Sc/scorerNeuSpecPerTopC3/IfOutputFileAlreadyExists  = "Overwrite"
i:Sc/scorerNeuSpecPerTopC3/EBins                     = 200
d:Sc/scorerNeuSpecPerTopC3/EBinMin                   = 1e-9 MeV
d:Sc/scorerNeuSpecPerTopC3/EBinMax                   = 250 MeV
s:Sc/scorerNeuSpecPerTopC3/EBinEnergy                = "DepositedInStep"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerTopC3/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerTopC3/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerTopC3/Component                  = "SphereC3"
b:Sc/scorerAmbDosePerTopC3/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerTopC3/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerAmbDosePerTopC3/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerTopC3/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerTopC3/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerTopC3/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2




########################################
# Location B4
########################################
s:Ge/SphereB4/Type     = "TsSphere"
s:Ge/SphereB4/Parent   = "Gantry"
s:Ge/SphereB4/Material = "Air"
s:Ge/SphereB4/Color    = "red"
d:Ge/SphereB4/RMax     = 15.0 cm 
d:Ge/SphereB4/SPhi     = 0. deg
d:Ge/SphereB4/DPhi     = 360. deg
d:Ge/SphereB4/STheta   = 0. deg
d:Ge/SphereB4/DTheta   = 180. deg
d:Ge/SphereB4/TransZ   = 5.55 m
d:Ge/SphereB4/TransX   = 2.2 m
d:Ge/SphereB4/TransY   = 1.7 m 
b:Ge/SphereB4/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerTopB4/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerTopB4/Component                  = "SphereB4"
b:Sc/scorerDosePerTopB4/OutputToConsole            = "True"
s:Sc/scorerDosePerTopB4/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerDosePerTopB4/OutputFile                 = "scorerDosePerTopB4" + Ts/Seed
sv:Sc/scorerDosePerTopB4/Report                    = 2 "Mean" "Standard_Deviation"

# Score neutron fluence spectra 
sv:Sc/scorerNeuSpecDosePerTopB4/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerNeuSpecPerTopB4/Quantity                   = "Fluence"
s:Sc/scorerNeuSpecPerTopB4/Component                  = "SphereB4"
s:Sc/scorerNeuSpecPerTopB4/OutputType                 = "csv"
s:Sc/scorerNeuSpecPerTopB4/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerNeuSpecPerTopB4/OutputFile                 = "scorerNeuSpecPerTopB4" + Ts/Seed
i:Sc/scorerNeuSpecPerTopB4/EBins                     = 200
d:Sc/scorerNeuSpecPerTopB4/EBinMin                   = 1e-9 MeV
d:Sc/scorerNeuSpecPerTopB4/EBinMax                   = 250 MeV
s:Sc/scorerNeuSpecPerTopB4/EBinEnergy                = "DepositedInStep"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerTopB4/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerTopB4/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerTopB4/Component                  = "SphereB4"
b:Sc/scorerAmbDosePerTopB4/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerTopB4/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerAmbDosePerTopB4/OutputFile                 = "scorerAmbDosePerTopB4" + Ts/Seed
sv:Sc/scorerAmbDosePerTopB4/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerTopB4/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerTopB4/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerTopB4/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2

########################################
# Location C4
########################################
s:Ge/SphereC4/Type     = "TsSphere"
s:Ge/SphereC4/Parent   = "Gantry"
s:Ge/SphereC4/Material = "Air"
s:Ge/SphereC4/Color    = "red"
d:Ge/SphereC4/RMax     = 15.0 cm 
d:Ge/SphereC4/SPhi     = 0. deg
d:Ge/SphereC4/DPhi     = 360. deg
d:Ge/SphereC4/STheta   = 0. deg
d:Ge/SphereC4/DTheta   = 180. deg
d:Ge/SphereC4/TransZ   = 5.55 m
d:Ge/SphereC4/TransX   = 0.7 m
d:Ge/SphereC4/TransY   = 1.7 m 
b:Ge/SphereC4/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerTopC4/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerTopC4/Component                  = "SphereC4"
b:Sc/scorerDosePerTopC4/OutputToConsole            = "True"
s:Sc/scorerDosePerTopC4/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerDosePerTopC4/OutputFile                 = "scorerDosePerTopC4" + Ts/Seed
sv:Sc/scorerDosePerTopC4/Report                    = 2 "Mean" "Standard_Deviation"

# Score neutron fluence spectra 
sv:Sc/scorerNeuSpecDosePerTopC4/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerNeuSpecPerTopC4/Quantity                   = "Fluence"
s:Sc/scorerNeuSpecPerTopC4/Component                  = "SphereC4"
s:Sc/scorerNeuSpecPerTopC4/OutputType                 = "csv"
s:Sc/scorerNeuSpecPerTopC4/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerNeuSpecPerTopC4/OutputFile                 = "scorerNeuSpecPerTopC4" + Ts/Seed
i:Sc/scorerNeuSpecPerTopC4/EBins                     = 200
d:Sc/scorerNeuSpecPerTopC4/EBinMin                   = 1e-9 MeV
d:Sc/scorerNeuSpecPerTopC4/EBinMax                   = 250 MeV
s:Sc/scorerNeuSpecPerTopC4/EBinEnergy                = "DepositedInStep"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerTopC4/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerTopC4/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerTopC4/Component                  = "SphereC4"
b:Sc/scorerAmbDosePerTopC4/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerTopC4/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerAmbDosePerTopC4/OutputFile                 = "scorerAmbDosePerTopC4" + Ts/Seed
sv:Sc/scorerAmbDosePerTopC4/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerTopC4/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerTopC4/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerTopC4/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2

