# Scanning nozzle used in some demonstrations.

includeFile = PCureConstantsForNozzlesQ4.txt

#Ts/DumpParameters = "T"

# Septum Electrostatic 
# Mother for septum assembly (optional, keeps things tidy)
s:Ge/Septum/Type        = "TsBox"
s:Ge/Septum/Parent      = "Gantry"
d:Ge/Septum/HLX         = 40 cm
d:Ge/Septum/HLY         = 40 cm
d:Ge/Septum/HLZ         = 40 cm
s:Ge/Septum/Material    = "G4_AIR"
d:Ge/Septum/TransX      = 0.0 cm
d:Ge/Septum/TransY      = 0.0 cm
d:Ge/Septum/TransZ      = 2.55 m
d:Ge/Septum/RotZ        = Ge/SeptumPhi deg # align local X radially
b:Ge/Septum/Include     = "TRUE" 

# The thin tungsten blade
s:Ge/SeptumBlade/Type     = "TsBox"
s:Ge/SeptumBlade/Parent   = "Septum"
d:Ge/SeptumBlade/HLX      = Ge/SeptumBladeThick cm * 0.5
d:Ge/SeptumBlade/HLY      = Ge/SeptumBladeLength cm * 0.5
d:Ge/SeptumBlade/HLZ      = Ge/SeptumBladeHeight cm * 0.5
s:Ge/SeptumBlade/Material = "G4_W"
b:Ge/SeptumBlade/Invisible = "False"

# Septum Magnetostatic  
# Yoke block centered a short drift downstream along the tangent
s:Ge/MSYoke/Type       = "TsBox"
s:Ge/MSYoke/Parent     = "Gantry"
# Make the yoke bigger than the gap by the chosen iron thickness
d:Ge/MSYoke/FLX        = Ge/MSGapeWidth + Ge/MSYokeDoubleThickRadial cm
d:Ge/MSYoke/HLX        = Ge/MSYoke/FLX cm * 0.5
d:Ge/MSYoke/HLY        = Ge/MSGapeLength cm * 0.5
d:Ge/MSYoke/FLZ        = Ge/MSGapeHeight + Ge/MSYokeDoubleThickRadial cm
d:Ge/MSYoke/HLZ        = Ge/MSYoke/FLZ cm * 0.5
s:Ge/MSYoke/Material   = "G4_Fe"
d:Ge/MSYoke/TransX     = 0.0 cm
d:Ge/MSYoke/TransY     = 0.0 cm
d:Ge/MSYoke/TransZ     = 1.85 m
# Rotate so local Y is along the ring tangent (same as septum)
d:Ge/MSYoke/RotZ       = Ge/SeptumPhi deg
b:Ge/MSYoke/Include    = "TRUE" 

# Field gap carved as a daughter (overrides parent material)
s:Ge/MSGap/Type        = "TsBox"
s:Ge/MSGap/Parent      = "MSYoke"
d:Ge/MSGap/HLX         = Ge/MSGapeWidth cm * 0.5
d:Ge/MSGap/HLY         = Ge/MSGapeLength cm * 0.5
d:Ge/MSGap/HLZ         = Ge/MSGapeHeight cm * 0.5
s:Ge/MSGap/Material    = "G4_AIR"
b:Ge/MSGap/IsInvisible  = "False"


########################################
#Cylindrical bottom quarter 
########################################
s:Ge/BottomRingQ4/Parent = "World"
s:Ge/BottomRingQ4/Type = "TsCylinder"
d:Ge/BottomRingQ4/Rmax = 2.3 m
d:Ge/BottomRingQ4/Rmin = 2.1 m
d:Ge/BottomRingQ4/HL = 0.15 m 
s:Ge/BottomRingQ4/Material = "G4_Fe"
d:Ge/BottomRingQ4/RotX = 90. deg 
d:Ge/BottomRingQ4/SPhi = 45 deg
d:Ge/BottomRingQ4/DPhi = 70 deg 
d:Ge/BottomRingQ4/TransX = 0 m
d:Ge/BottomRingQ4/TransY = -0.413 m
d:Ge/BottomRingQ4/TransZ = 0 m
b:Ge/BottomRingQ4/Include  = "TRUE" 

s:Ge/BottomRingQ1/Parent = "World"
s:Ge/BottomRingQ1/Type = "TsCylinder"
d:Ge/BottomRingQ1/Rmax = 2.3 m
d:Ge/BottomRingQ1/Rmin = 2.1 m
d:Ge/BottomRingQ1/HL = 0.15 m 
s:Ge/BottomRingQ1/Material = "G4_Fe"
d:Ge/BottomRingQ1/RotX = 90. deg 
d:Ge/BottomRingQ1/SPhi = 315 deg
d:Ge/BottomRingQ1/DPhi = 70 deg 
d:Ge/BottomRingQ1/TransX = 0 m
d:Ge/BottomRingQ1/TransY = -0.413 m
d:Ge/BottomRingQ1/TransZ = 0 m
b:Ge/BottomRingQ1/Include  = "TRUE" 

########################################
# Dipole by Bottom Ring Quarters 
########################################
s:Ge/Q4Dipole/Type          = "TsBox"
s:Ge/Q4Dipole/Parent        = "World"
s:Ge/Q4Dipole/Material      = "parent"
d:Ge/Q4Dipole/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Q4Dipole/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Q4Dipole/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/Q4Dipole/TransX        = 1.8 m
d:Ge/Q4Dipole/TransY        = -0.413 m
d:Ge/Q4Dipole/TransZ        = -1.2 m
d:Ge/Q4Dipole/RotX          = 0.0 deg
d:Ge/Q4Dipole/RotY          = 315.0 deg
d:Ge/Q4Dipole/RotZ          = 0.0 deg
s:Ge/Q4Dipole/Field = "DipoleMagnet"
u:Ge/Q4Dipole/MagneticFieldDirectionX    = 1.0 #Deflect a beam upward 
u:Ge/Q4Dipole/MagneticFieldDirectionY    = 0.0  
u:Ge/Q4Dipole/MagneticFieldDirectionZ    = 0.0
d:Ge/Q4Dipole/MagneticFieldStrength      = 4.0 tesla
b:Ge/Q4Dipole/Include  = "TRUE" 

s:Ge/Q4p2Dipole/Type          = "TsBox"
s:Ge/Q4p2Dipole/Parent        = "World"
s:Ge/Q4p2Dipole/Material      = "parent"
d:Ge/Q4p2Dipole/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Q4p2Dipole/HLY           = 80 mm #Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Q4p2Dipole/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/Q4p2Dipole/TransX        = 2.14 m
d:Ge/Q4p2Dipole/TransY        = -0.18 m
d:Ge/Q4p2Dipole/TransZ        = -0.9 m #-1.0 m
d:Ge/Q4p2Dipole/RotX          = 0.0 deg
d:Ge/Q4p2Dipole/RotY          = 305.0 deg
d:Ge/Q4p2Dipole/RotZ          = 0.0 deg
s:Ge/Q4p2Dipole/Field = "DipoleMagnet"
u:Ge/Q4p2Dipole/MagneticFieldDirectionX    = 0.0 
u:Ge/Q4p2Dipole/MagneticFieldDirectionY    = 1.0 #Deflect a beam inward 
u:Ge/Q4p2Dipole/MagneticFieldDirectionZ    = 0.0
d:Ge/Q4p2Dipole/MagneticFieldStrength      = 3.0 tesla #6.0
b:Ge/Q4p2Dipole/Include  = "TRUE" 

s:Ge/Q4p3Quad/Type          = "TsBox"
s:Ge/Q4p3Quad/Parent        = "World"
s:Ge/Q4p3Quad/Material      = "parent"
d:Ge/Q4p3Quad/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Q4p3Quad/HLY           = 80 mm #Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Q4p3Quad/HLZ           = 5 cm
d:Ge/Q4p3Quad/TransX        = 2.28 m
d:Ge/Q4p3Quad/TransY        = -0.05 m
d:Ge/Q4p3Quad/TransZ        = -0.64 m #-0.74 m
d:Ge/Q4p3Quad/RotX          = 0.0 deg
d:Ge/Q4p3Quad/RotY          = 315.0 deg
d:Ge/Q4p3Quad/RotZ          = 0.0 deg
s:Ge/Q4p3Quad/Field = "QuadrupoleMagnet"
u:Ge/Q4p3Quad/MagneticFieldDirectionX    = -1
u:Ge/Q4p3Quad/MagneticFieldDirectionY    = 2.0 
u:Ge/Q4p3Quad/MagneticFieldDirectionZ    = 3.0
d:Ge/Q4p3Quad/MagneticFieldGradientX    = 0.5 tesla/cm 
d:Ge/Q4p3Quad/MagneticFieldGradientY    = 0.5 tesla/cm 
b:Ge/Q4p3Quad/Include  = "TRUE" 

s:Ge/Q4p4Dipole/Type          = "TsBox"
s:Ge/Q4p4Dipole/Parent        = "World"
s:Ge/Q4p4Dipole/Material      = "parent"
d:Ge/Q4p4Dipole/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/Q4p4Dipole/HLY           = 80 mm #Ge/PipeInDipoles/Gas/HLY mm
d:Ge/Q4p4Dipole/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/Q4p4Dipole/TransX        = 2.52 m
d:Ge/Q4p4Dipole/TransY        = -0.05 m
d:Ge/Q4p4Dipole/TransZ        = -0.47 m #-0.57 m
d:Ge/Q4p4Dipole/RotX          = 0.0 deg
d:Ge/Q4p4Dipole/RotY          = 325.0 deg
d:Ge/Q4p4Dipole/RotZ          = 0.0 deg
s:Ge/Q4p4Dipole/Field = "DipoleMagnet"
u:Ge/Q4p4Dipole/MagneticFieldDirectionX    = 1.0 #Deflect a beam upward 
u:Ge/Q4p4Dipole/MagneticFieldDirectionY    = 0.0  
u:Ge/Q4p4Dipole/MagneticFieldDirectionZ    = 0.0
d:Ge/Q4p4Dipole/MagneticFieldStrength      = 0.1 tesla
b:Ge/Q4p4Dipole/Include  = "TRUE" 

########################################
# Extra Dipole near Extraction 
########################################
s:Ge/ExDipole1/Type          = "TsBox"
s:Ge/ExDipole1/Parent        = "World"
s:Ge/ExDipole1/Material      = "parent"
d:Ge/ExDipole1/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/ExDipole1/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/ExDipole1/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/ExDipole1/TransX        = 2.7 m
d:Ge/ExDipole1/TransY        = 0.2 m
d:Ge/ExDipole1/TransZ        = 0.5 m
d:Ge/ExDipole1/RotX          = 0.0 deg
d:Ge/ExDipole1/RotY          = 0.0 deg
d:Ge/ExDipole1/RotZ          = 0.0 deg
s:Ge/ExDipole1/Field = "DipoleMagnet"
u:Ge/ExDipole1/MagneticFieldDirectionX    = -1.0 #Deflect a beam downward
u:Ge/ExDipole1/MagneticFieldDirectionY    = 0.0 
u:Ge/ExDipole1/MagneticFieldDirectionZ    = 0.0
d:Ge/ExDipole1/MagneticFieldStrength      = 2.0 tesla
b:Ge/ExDipole1/Include  = "TRUE" 

s:Ge/ExDipole2/Type          = "TsBox"
s:Ge/ExDipole2/Parent        = "World"
s:Ge/ExDipole2/Material      = "parent"
d:Ge/ExDipole2/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/ExDipole2/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/ExDipole2/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/ExDipole2/TransX        = 2.7 m
d:Ge/ExDipole2/TransY        = 0.1 m
d:Ge/ExDipole2/TransZ        = 0.2 m
d:Ge/ExDipole2/RotX          = 0.0 deg
d:Ge/ExDipole2/RotY          = 0.0 deg
d:Ge/ExDipole2/RotZ          = 0.0 deg
s:Ge/ExDipole2/Field = "DipoleMagnet"
u:Ge/ExDipole2/MagneticFieldDirectionX    = 0.0 
u:Ge/ExDipole2/MagneticFieldDirectionY    = 1.0 #Deflect a beam inward 
u:Ge/ExDipole2/MagneticFieldDirectionZ    = 0.0
d:Ge/ExDipole2/MagneticFieldStrength      = 4.0 tesla
b:Ge/ExDipole2/Include  = "TRUE" 

s:Ge/ExDipole3/Type          = "TsBox"
s:Ge/ExDipole3/Parent        = "World"
s:Ge/ExDipole3/Material      = "parent"
d:Ge/ExDipole3/HLX           = Ge/PipeInDipoles/Gas/HLX + Ge/PipeInDipoles/Gas/HLX mm 
d:Ge/ExDipole3/HLY           = Ge/PipeInDipoles/Gas/HLY mm
d:Ge/ExDipole3/HLZ           = Ge/HLOf_Dipole1 mm
d:Ge/ExDipole3/TransX        = 2.7 m
d:Ge/ExDipole3/TransY        = 0.05 m
d:Ge/ExDipole3/TransZ        = -0.1 m
d:Ge/ExDipole3/RotX          = 0.0 deg
d:Ge/ExDipole3/RotY          = 0.0 deg
d:Ge/ExDipole3/RotZ          = 0.0 deg
s:Ge/ExDipole3/Field = "DipoleMagnet"
u:Ge/ExDipole3/MagneticFieldDirectionX    = -1.0 #Deflect a beam down  
u:Ge/ExDipole3/MagneticFieldDirectionY    = 0.0 
u:Ge/ExDipole3/MagneticFieldDirectionZ    = 0.0
d:Ge/ExDipole3/MagneticFieldStrength      = 2.0 tesla
b:Ge/ExDipole3/Include  = "TRUE" 

i:Gr/ViewA/MagneticFieldArrowDensity = 10

########################################
# Location B1
########################################
s:Ge/SphereB1/Type     = "TsSphere"
s:Ge/SphereB1/Parent   = "Gantry"
s:Ge/SphereB1/Material = "Air"
s:Ge/SphereB1/Color    = "red"
d:Ge/SphereB1/RMax     = 15.0 cm 
d:Ge/SphereB1/SPhi     = 0. deg
d:Ge/SphereB1/DPhi     = 360. deg
d:Ge/SphereB1/STheta   = 0. deg
d:Ge/SphereB1/DTheta   = 180. deg
d:Ge/SphereB1/TransZ   = -195.0 cm
d:Ge/SphereB1/TransX   = -50.0 cm
b:Ge/SphereB1/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerDipoleQ4B1/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerDipoleQ4B1/Component                  = "SphereB1"
b:Sc/scorerDosePerDipoleQ4B1/OutputToConsole            = "True"
s:Sc/scorerDosePerDipoleQ4B1/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerDosePerDipoleQ4B1/Report                    = 2 "Mean" "Standard_Deviation"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerDipoleQ4B1/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerDipoleQ4B1/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerDipoleQ4B1/Component                  = "SphereB1"
b:Sc/scorerAmbDosePerDipoleQ4B1/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerDipoleQ4B1/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerAmbDosePerDipoleQ4B1/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerDipoleQ4B1/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerDipoleQ4B1/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerDipoleQ4B1/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2


########################################
# Location C1
########################################
s:Ge/SphereC1/Type     = "TsSphere"
s:Ge/SphereC1/Parent   = "Gantry"
s:Ge/SphereC1/Material = "Air"
s:Ge/SphereC1/Color    = "red"
d:Ge/SphereC1/RMax     = 15.0 cm 
d:Ge/SphereC1/SPhi     = 0. deg
d:Ge/SphereC1/DPhi     = 360. deg
d:Ge/SphereC1/STheta   = 0. deg
d:Ge/SphereC1/DTheta   = 180. deg
d:Ge/SphereC1/TransZ   = -195.0 cm
d:Ge/SphereC1/TransX   = -200.0 cm
b:Ge/SphereC1/Include  = "TRUE" 

# Score absorbed dose for secondary radiation
s:Sc/scorerDosePerDipoleQ4C1/Quantity                   = "DoseToMedium"
s:Sc/scorerDosePerDipoleQ4C1/Component                  = "SphereC1"
b:Sc/scorerDosePerDipoleQ4C1/OutputToConsole            = "True"
s:Sc/scorerDosePerDipoleQ4C1/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerDosePerDipoleQ4C1/Report                    = 2 "Mean" "Standard_Deviation"

# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerDipoleQ4C1/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerDipoleQ4C1/Quantity                   = "AmbientDoseEquivalent"
s:Sc/scorerAmbDosePerDipoleQ4C1/Component                  = "SphereC1"
b:Sc/scorerAmbDosePerDipoleQ4C1/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerDipoleQ4C1/IfOutputFileAlreadyExists  = "Overwrite"
sv:Sc/scorerAmbDosePerDipoleQ4C1/Report                    = 2 "Mean" "Standard_Deviation"

# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerDipoleQ4C1/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerDipoleQ4C1/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerDipoleQ4C1/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2
