# These values are used in all of the nozzle examples.

#All coordination information comes from TsDefaultParameters.
#IEC 61217 compliance

#Fixed Reference system (If)     => World volume
#Gantry coordination system (Ig) => GantryCoordination
#Source coordination system (S)  => BeamPosition rotateX(180), Z position w.r.t GantryCoordination
#Beam source coordinate system rotate 180 and translate along z w.r.t g.
#-> Y is -Y. we have to flip phase space data.
#Isocenter coordination system (Io)

d:Ge/World/HLX = 1. m
d:Ge/World/HLY = 1. m
d:Ge/World/HLZ = 3. m

#S2I
#d:Ge/S2I = 3.0 m

#Gantry coordination system (Ig)
s:Ge/Gantry/Parent = "World"
s:Ge/Gantry/Type   = "Group"
d:Ge/Gantry/TransX = 0. m
d:Ge/Gantry/TransY = 0. m
d:Ge/Gantry/TransZ = 0. m
d:Ge/Gantry/RotX   = 0. deg
d:Ge/Gantry/RotY   = 0. deg
d:Ge/Gantry/RotZ   = 0. deg

# Default Beam position
s:Ge/BeamPosition/Parent = "Gantry"
s:Ge/BeamPosition/Type   = "Group"
d:Ge/BeamPosition/TransX = 0. m
d:Ge/BeamPosition/TransY = 0. m
d:Ge/BeamPosition/TransZ = 3.0 m
d:Ge/BeamPosition/RotX   = 180. deg
d:Ge/BeamPosition/RotY   = 0. deg
d:Ge/BeamPosition/RotZ   = 0. deg

s:So/Beam/Type                     = "Beam"
s:So/Beam/Component                = "BeamPosition"
s:So/Beam/BeamParticle             = "proton"
d:So/Beam/BeamEnergy               = 200 MeV #FIXME 
u:So/Beam/BeamEnergySpread         = 1.5 #FIXME 
s:So/Beam/BeamPositionDistribution = "Gaussian"
s:So/Beam/BeamPositionCutoffShape  = "Ellipse"
d:So/Beam/BeamPositionCutoffX      = 5. cm #FIXME
d:So/Beam/BeamPositionCutoffY      = 5. cm #FIXME
d:So/Beam/BeamPositionSpreadX      = 1.105 cm #FIXME
d:So/Beam/BeamPositionSpreadY      = 1.105 cm #FIXME
s:So/Beam/BeamAngularDistribution  = "Gaussian"
d:So/Beam/BeamAngularCutoffX       = 90. deg
d:So/Beam/BeamAngularCutoffY       = 90. deg
d:So/Beam/BeamAngularSpreadX       = 0.0030 rad #FIXME
d:So/Beam/BeamAngularSpreadY       = 0.0030 rad #FIXME
i:So/Beam/NumberOfHistoriesInRun   = 1000000 #FIXME essentially the number of primary particles 

b:Ts/ShowCPUTime                  = "true"
i:Ts/ShowHistoryCountAtInterval   = 0
b:Ts/ShowHistoryCountOnSingleLine = "False"

########################################
#Material
#NitrogenGas for Chamber
#HeliumGas   for Pipe
########################################
sv:Ma/NiGas/Components = 1 "Nitrogen"
uv:Ma/NiGas/Fractions  = 1 1.0
d:Ma/NiGas/Density     = 0.001251 g/cm3
#0.001251 g/cm3 (gas, 0 C, 101.325 kPa)

sv:Ma/HeGas/Components = 1 "Helium"
uv:Ma/HeGas/Fractions  = 1 1.0
d:Ma/HeGas/Density     = 0.000166322 g/cm3

sv:Ma/Gold/Components          = 1 "Gold"
uv:Ma/Gold/Fractions           = 1 1.0
d:Ma/Gold/Density              = 19.3 g/cm3
d:Ma/Gold/MeanExcitationEnergy = 790.0 eV
s:Ma/Gold/DefaultColor         = "orange"

sv:Ma/CompensatorLucite/Components          = 3 "Hydrogen" "Carbon" "Oxygen"
uv:Ma/CompensatorLucite/Fractions           = 3 0.080538 0.599848 0.319614
d:Ma/CompensatorLucite/Density              = 1.181 g/cm3
d:Ma/CompensatorLucite/MeanExcitationEnergy = 74.0 eV
s:Ma/CompensatorLucite/DefaultColor         = "grey"

########################################
# OGL Settings
########################################
s:Gr/MyOGL/Type        = "OpenGL"
i:Gr/MyOGL/WindowSizeX = 600
i:Gr/MyOGL/WindowSizeY = 600
i:Gr/MyOGL/WindowPosX  = 0
i:Gr/MyOGL/WindowPosY  = 0
s:Gr/MyOGL/ColorBy     = "ParticleType"
sv:Gr/MyOGL/ColorByParticleTypeNames      = 4 "e-" "gamma" "proton" "neutron"
sv:Gr/MyOGL/ColorByParticleTypeColors     = 4 "yellow" "pink" "aqua" "grass"


s:Gr/ViewA/Type              = "OpenGL"

Ts/UseQt = "False"
b:Gr/Enable = "False"

########################################
# Physics
########################################
sv:Ph/Default/Modules = 7 "g4em-standard_opt3" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping" "g4radioactivedecay" #FIXME
#d:Ph/Default/CutForAllParticles = 0.05 cm #FIXME
i:Tf/Verbosity = 1

########################################
# Sequence control
########################################
b:Ts/PauseBeforeSequence = "F"
